PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 0
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent Fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      fillColor = white
      size = 10,10
      shape = cross
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    PolygonComponent Line1
      startVal [time (s)] = 1.0
      fillColor = white
      size = (100,10)
      pos = (-150,0)
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent Line2
      startVal [time (s)] = 1.0
      fillColor = white
      size = (100,10)
      pos = (-50,0)
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent Line3
      startVal [time (s)] = 1.0
      fillColor = white
      size = (100,10)
      pos = (50,0)
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent Line4
      startVal [time (s)] = 1.0
      fillColor = white
      size = (100,10)
      pos = (150,0)
      units = pix
      ori = 90
      shape = rectangle
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    PolygonComponent Probe
      startVal [time (s)] = 2
      fillColor = white
      size = 10,10
      pos = (pos,60)
      units = pix
      shape = triangle
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    KeyboardComponent key_resp
      startVal [time (s)] = 2.0
      forceEndRoutine = True
      storeCorrect = True
      correctAns = $corr_resp
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    conditionsFile = seq conditions.csv
    nReps = 24
    conditions = []
    endPoints = [0,1]
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    LoopInitiator trials2 loopType="TrialHandler"
      loopType = random
      conditionsFile = seq conditions.csv
      nReps = 24
      conditions = []
      endPoints = [0,1]
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      Routine trial
    LoopTerminator trials
    Routine trial
  LoopTerminator trials2
