PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        if random() > 0.5:
            tilt = 0
            corrAns = 'up'
        else:
            if random() > 0.5:
                tilt = randint(1, 5)
                corrAns = 'down'
            else:
                tilt = randint(-5, -1)
                corrAns = 'down'
      End Routine:
        trials.addData('tilt', tilt)

        if random() > 0.5:
            tilt = 0;
            corrAns = 'up'
        else:

            if random() > 0.5:
                tilt = randint(1,5)
                corrAns = 'down'
            else:
                tilt = randint(-5,-1)
                corrAns = 'down'
    PolygonComponent Fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      fillColor = white
      size = 10,10
      units = pix
      shape = triangle
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    GratingComponent grating
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 0.3
      size = [0.5,0.5]
      ori [set every repeat] = tilt
      tex = sin
      mask = gauss
      phase = 0
      sf = 5
      saveStartStop = False
      contrast = 0.3
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    KeyboardComponent key_resp
      startVal [time (s)] = 1
      forceEndRoutine = True
      allowedKeys = 'up','down'
      storeCorrect = True
      correctAns = $corrAns
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
