PsychoPy2experiment version="2026.1.0"
Settings
  runMode = 1
  Experiment info = {"participant":"f\"{randint(0, 999999):06.0f}\"","session":"001"}
  Monitor = testMonitor
  Screen = 1
  Full-screen window = True
  Window size (pixels) = [1024,768]
  Units = height
  Data filename = 'data/' + expInfo['participant'] + '_' + expName + '_' + expInfo['date']
  colPriority = {"thisRow.t":"priority.CRITICAL","expName":"priority.LOW"}
  keyboardBackend = PsychToolbox
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Routines
  Routine trial
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    PolygonComponent Fixation
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      fillColor = white
      size = 0.1,0.1
      shape = cross
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    TextComponent Target
      startVal [time (s)] = 0
      pos = (random()-0.5, random()-0.5)
      text = T
      letterHeight = 0.05
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if random() > 0.5:
        num_distr = 10
        thisExp.addData('num_distr', num_distr)
        else:
        num_distr = 5
        thisExp.addData('num_distr', num_distr)
        distractors = []
        for i in range(num_distr):
        distr = visual.TextStim(win=win, name='distr',
        text='L',
        font='Open Sans', pos=(random()-0.5, random()-0.5), height=0.1, wrapWidth=None,
        ori=randint(1,360),
        color='white', colorSpace='rgb', opacity=None,
        languageStyle='LTR',
        depth=0.0);

        distractors.append(distr)

        for distr in distractors:
        distr.setAutoDraw(True)
      End Routine:
        for distr in distractors:
        distr.setAutoDraw(False)
    MouseComponent mouse
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      timeRelativeTo = routine
      clickable = Target
      saveParamsClickable [set every repeat] = response
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
    conditions = []
    endPoints = [0,1]
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    Routine trial
  LoopTerminator trials
